// This CellML file was generated on 11/03/2008 at 16:13:16 using:
//
// COR (0.9.31.897)
// Copyright 2002-2008 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
def model garny_2003 as
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar4 as
    unit millimolar {expo: 4};
  enddef;
  def unit millijoule_per_mole_kelvin as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit microlitre_per_second as
    unit litre {pref: micro};
    unit second {expo: -1};
  enddef;

  def comp environment as
    var time: second {interface: public};
  enddef;

  def comp membrane as
    var Version: dimensionless {init: 1, interface: public};
    var dCell: dimensionless {init: 0, interface: public};
    var FCellConstant: dimensionless {init: 1.0309347, interface: public};
    var FCell: dimensionless {interface: public};
    var V: millivolt {init: -39.013558536, interface: public};
    var R: millijoule_per_mole_kelvin {init: 8314, interface: public};
    var T: kelvin {init: 310, interface: public};
    var F: coulomb_per_mole {init: 96845, interface: public};
    var Cm: microF;
    var CmCentre: microF {init: 2e-5};
    var CmPeriphery: microF {init: 6.5e-5};
    var time: second {interface: public};
    var i_Na: nanoA {interface: public};
    var i_Ca_L: nanoA {interface: public};
    var i_Ca_T: nanoA {interface: public};
    var i_to: nanoA {interface: public};
    var i_sus: nanoA {interface: public};
    var i_K_r: nanoA {interface: public};
    var i_K_s: nanoA {interface: public};
    var i_f_Na: nanoA {interface: public};
    var i_f_K: nanoA {interface: public};
    var i_b_Na: nanoA {interface: public};
    var i_b_Ca: nanoA {interface: public};
    var i_b_K: nanoA {interface: public};
    var i_NaCa: nanoA {interface: public};
    var i_p: nanoA {interface: public};
    var i_Ca_p: nanoA {interface: public};
    FCell = sel
      case Version == 0{dimensionless}:
        1.07{dimensionless}*(3{dimensionless}*dCell-0.1{dimensionless})/(3{dimensionless}*(1{dimensionless}+0.7745{dimensionless}*exp(-(3{dimensionless}*dCell-2.05{dimensionless})/0.295{dimensionless})));
      case Version == 1{dimensionless}:
        FCellConstant*dCell/(1{dimensionless}+0.7745{dimensionless}*exp(-(3{dimensionless}*dCell-2.05{dimensionless})/0.295{dimensionless}));
      otherwise:
        1.07{dimensionless}*29{dimensionless}*dCell/(30{dimensionless}*(1{dimensionless}+0.7745{dimensionless}*exp(-(29{dimensionless}*dCell-24.5{dimensionless})/1.95{dimensionless})));
    endsel;
    Cm = CmCentre+FCell*(CmPeriphery-CmCentre);
    ode(V, time) = -1{dimensionless}/Cm*(i_Na+i_Ca_L+i_Ca_T+i_to+i_sus+i_K_r+i_K_s+i_f_Na+i_f_K+i_b_Na+i_b_Ca+i_b_K+i_NaCa+i_p+i_Ca_p);
  enddef;

  def comp sodium_current as
    var Version: dimensionless {interface: public_and_private};
    var FCell: dimensionless {interface: public};
    var i_Na: nanoA {interface: public};
    var g_Na: microlitre_per_second;
    var g_Na_Centre_Published: microlitre_per_second {init: 0};
    var g_Na_Centre_0DCapable: microlitre_per_second {init: 0};
    var g_Na_Centre_1DCapable: microlitre_per_second {init: 0};
    var g_Na_Periphery_Published: microlitre_per_second {init: 1.2e-6};
    var g_Na_Periphery_0DCapable: microlitre_per_second {init: 1.204e-6};
    var g_Na_Periphery_1DCapable: microlitre_per_second {init: 3.7e-7};
    var E_Na: millivolt {interface: public};
    var Na_o: millimolar {interface: public};
    var R: millijoule_per_mole_kelvin {interface: public};
    var F: coulomb_per_mole {interface: public};
    var T: kelvin {interface: public};
    var time: second {interface: public_and_private};
    var V: millivolt {interface: public_and_private};
    var m: dimensionless {interface: private};
    var h: dimensionless {interface: private};
    g_Na = sel
      case Version == 0{dimensionless}:
        g_Na_Centre_Published+FCell*(g_Na_Periphery_Published-g_Na_Centre_Published);
      case Version == 1{dimensionless}:
        g_Na_Centre_0DCapable+FCell*(g_Na_Periphery_0DCapable-g_Na_Centre_0DCapable);
      otherwise:
        g_Na_Centre_1DCapable+FCell*(g_Na_Periphery_1DCapable-g_Na_Centre_1DCapable);
    endsel;
    i_Na = g_Na*pow(m, 3{dimensionless})*h*Na_o*sqr(F)/(R*T)*(exp((V-E_Na)*F/(R*T))-1{dimensionless})/(exp(V*F/(R*T))-1{dimensionless})*V;
  enddef;

  def comp sodium_current_m_gate as
    var Version: dimensionless {interface: public};
    var m: dimensionless {init: 0.092361701692, interface: public};
    var m_infinity: dimensionless;
    var tau_m: second;
    var V: millivolt {interface: public};
    var time: second {interface: public};
    ode(m, time) = (m_infinity-m)/tau_m;
    m_infinity = sel
      case Version == 0{dimensionless}:
        pow(1{dimensionless}/(1{dimensionless}+exp(-V/5.46{millivolt})), 1{dimensionless}/3{dimensionless});
      otherwise:
        pow(1{dimensionless}/(1{dimensionless}+exp(-(V+30.32{millivolt})/5.46{millivolt})), 1{dimensionless}/3{dimensionless});
    endsel;
    tau_m = sel
      case Version == 0{dimensionless}:
        0.0006247{second}/(0.832{dimensionless}*exp(-0.335{per_millivolt}*(V+56.7{millivolt}))+0.627{dimensionless}*exp(0.082{per_millivolt}*(V+65.01{millivolt})))+4e-5{second};
      otherwise:
        0.0006247{second}/(0.8322166{dimensionless}*exp(-0.33566{per_millivolt}*(V+56.7062{millivolt}))+0.6274{dimensionless}*exp(0.0823{per_millivolt}*(V+65.0131{millivolt})))+4.569e-5{second};
    endsel;
  enddef;

  def comp sodium_current_h_gate as
    var Version: dimensionless {interface: public};
    var h: dimensionless {interface: public};
    var F_Na: dimensionless;
    var h1: dimensionless {init: 0.015905380261};
    var h2: dimensionless {init: 0.01445216109};
    var h1_infinity: dimensionless;
    var h2_infinity: dimensionless;
    var tau_h1: second;
    var tau_h2: second;
    var V: millivolt {interface: public};
    var time: second {interface: public};
    F_Na = sel
      case Version == 0{dimensionless}:
        0.0952{dimensionless}*exp(-0.063{per_millivolt}*(V+34.4{millivolt}))/(1{dimensionless}+1.66{dimensionless}*exp(-0.225{per_millivolt}*(V+63.7{millivolt})))+0.0869{dimensionless};
      otherwise:
        0.09518{dimensionless}*exp(-0.06306{per_millivolt}*(V+34.4{millivolt}))/(1{dimensionless}+1.662{dimensionless}*exp(-0.2251{per_millivolt}*(V+63.7{millivolt})))+0.08693{dimensionless};
    endsel;
    h = (1{dimensionless}-F_Na)*h1+F_Na*h2;
    ode(h1, time) = (h1_infinity-h1)/tau_h1;
    ode(h2, time) = (h2_infinity-h2)/tau_h2;
    h1_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+66.1{millivolt})/6.4{millivolt}));
    h2_infinity = h1_infinity;
    tau_h1 = 3.717e-6{second}*exp(-0.2815{per_millivolt}*(V+17.11{millivolt}))/(1{dimensionless}+0.003732{dimensionless}*exp(-0.3426{per_millivolt}*(V+37.76{millivolt})))+0.0005977{second};
    tau_h2 = 3.186e-8{second}*exp(-0.6219{per_millivolt}*(V+18.8{millivolt}))/(1{dimensionless}+7.189e-5{dimensionless}*exp(-0.6683{per_millivolt}*(V+34.07{millivolt})))+0.003556{second};
  enddef;

  def comp L_type_Ca_channel as
    var Version: dimensionless {interface: public_and_private};
    var FCell: dimensionless {interface: public_and_private};
    var i_Ca_L: nanoA {interface: public};
    var g_Ca_L_Centre_Published: microS {init: 0.0058};
    var g_Ca_L_Centre_0DCapable: microS {init: 0.0057938};
    var g_Ca_L_Centre_1DCapable: microS {init: 0.0082};
    var g_Ca_L_Periphery_Published: microS {init: 0.0659};
    var g_Ca_L_Periphery_0DCapable: microS {init: 0.06588648};
    var g_Ca_L_Periphery_1DCapable: microS {init: 0.0659};
    var g_Ca_L: microS;
    var E_Ca_L: millivolt {init: 46.4};
    var time: second {interface: public_and_private};
    var V: millivolt {interface: public_and_private};
    var d_L: dimensionless {interface: private};
    var f_L: dimensionless {interface: private};
    g_Ca_L = sel
      case Version == 0{dimensionless}:
        g_Ca_L_Centre_Published+FCell*(g_Ca_L_Periphery_Published-g_Ca_L_Centre_Published);
      case Version == 1{dimensionless}:
        g_Ca_L_Centre_0DCapable+FCell*(g_Ca_L_Periphery_0DCapable-g_Ca_L_Centre_0DCapable);
      otherwise:
        g_Ca_L_Centre_1DCapable+FCell*(g_Ca_L_Periphery_1DCapable-g_Ca_L_Centre_1DCapable);
    endsel;
    i_Ca_L = g_Ca_L*(f_L*d_L+0.006{dimensionless}/(1{dimensionless}+exp(-(V+14.1{millivolt})/6{millivolt})))*(V-E_Ca_L);
  enddef;

  def comp L_type_Ca_channel_d_gate as
    var Version: dimensionless {interface: public};
    var FCell: dimensionless {interface: public};
    var d_L: dimensionless {init: 0.04804900895, interface: public};
    var alpha_d_L: per_second;
    var beta_d_L: per_second;
    var d_L_infinity: dimensionless;
    var tau_d_L: second;
    var V: millivolt {interface: public};
    var time: second {interface: public};
    ode(d_L, time) = (d_L_infinity-d_L)/tau_d_L;
    alpha_d_L = sel
      case Version == 0{dimensionless}:
        -28.38{per_millivolt_second}*(V+35{millivolt})/(exp(-(V+35{millivolt})/2.5{millivolt})-1{dimensionless})-84.9{per_millivolt_second}*V/(exp(-0.208{per_millivolt}*V)-1{dimensionless});
      case Version == 1{dimensionless}:
        -28.39{per_millivolt_second}*(V+35{millivolt})/(exp(-(V+35{millivolt})/2.5{millivolt})-1{dimensionless})-84.9{per_millivolt_second}*V/(exp(-0.208{per_millivolt}*V)-1{dimensionless});
      otherwise:
        -28.4{per_millivolt_second}*(V+35{millivolt})/(exp(-(V+35{millivolt})/2.5{millivolt})-1{dimensionless})-84.9{per_millivolt_second}*V/(exp(-0.208{per_millivolt}*V)-1{dimensionless});
    endsel;
    beta_d_L = sel
      case Version == 1{dimensionless}:
        11.43{per_millivolt_second}*(V-5{millivolt})/(exp(0.4{per_millivolt}*(V-5{millivolt}))-1{dimensionless});
      otherwise:
        11.42{per_millivolt_second}*(V-5{millivolt})/(exp(0.4{per_millivolt}*(V-5{millivolt}))-1{dimensionless});
    endsel;
    tau_d_L = 2{dimensionless}/(alpha_d_L+beta_d_L);
    d_L_infinity = sel
      case Version == 0{dimensionless}:
        1{dimensionless}/(1{dimensionless}+exp(-(V+23.1{millivolt})/6{millivolt}));
      case Version == 1{dimensionless}:
        1{dimensionless}/(1{dimensionless}+exp(-(V+22.3{millivolt}+0.8{millivolt}*FCell)/6{millivolt}));
      otherwise:
        1{dimensionless}/(1{dimensionless}+exp(-(V+22.2{millivolt})/6{millivolt}));
    endsel;
  enddef;

  def comp L_type_Ca_channel_f_gate as
    var Version: dimensionless {interface: public};
    var FCell: dimensionless {interface: public};
    var f_L: dimensionless {init: 0.48779845203, interface: public};
    var alpha_f_L: per_second;
    var beta_f_L: per_second;
    var f_L_infinity: dimensionless;
    var tau_f_L: second;
    var V: millivolt {interface: public};
    var time: second {interface: public};
    ode(f_L, time) = (f_L_infinity-f_L)/tau_f_L;
    alpha_f_L = sel
      case Version == 1{dimensionless}:
        3.75{per_millivolt_second}*(V+28{millivolt})/(exp((V+28{millivolt})/4{millivolt})-1{dimensionless});
      otherwise:
        3.12{per_millivolt_second}*(V+28{millivolt})/(exp((V+28{millivolt})/4{millivolt})-1{dimensionless});
    endsel;
    beta_f_L = sel
      case Version == 1{dimensionless}:
        30{per_second}/(1{dimensionless}+exp(-(V+28{millivolt})/4{millivolt}));
      otherwise:
        25{per_second}/(1{dimensionless}+exp(-(V+28{millivolt})/4{millivolt}));
    endsel;
    tau_f_L = sel
      case Version == 1{dimensionless}:
        (1.2{dimensionless}-0.2{dimensionless}*FCell)/(alpha_f_L+beta_f_L);
      otherwise:
        1{dimensionless}/(alpha_f_L+beta_f_L);
    endsel;
    f_L_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+45{millivolt})/5{millivolt}));
  enddef;

  def comp T_type_Ca_channel as
    var Version: dimensionless {interface: public_and_private};
    var FCell: dimensionless {interface: public_and_private};
    var i_Ca_T: nanoA {interface: public};
    var g_Ca_T_Centre_Published: microS {init: 0.0043};
    var g_Ca_T_Centre_0DCapable: microS {init: 0.00427806};
    var g_Ca_T_Centre_1DCapable: microS {init: 0.0021};
    var g_Ca_T_Periphery_Published: microS {init: 0.0139};
    var g_Ca_T_Periphery_0DCapable: microS {init: 0.0138823};
    var g_Ca_T_Periphery_1DCapable: microS {init: 0.00694};
    var g_Ca_T: microS;
    var E_Ca_T: millivolt {init: 45};
    var time: second {interface: public_and_private};
    var V: millivolt {interface: public_and_private};
    var d_T: dimensionless {interface: private};
    var f_T: dimensionless {interface: private};
    g_Ca_T = sel
      case Version == 0{dimensionless}:
        g_Ca_T_Centre_Published+FCell*(g_Ca_T_Periphery_Published-g_Ca_T_Centre_Published);
      case Version == 1{dimensionless}:
        g_Ca_T_Centre_0DCapable+FCell*(g_Ca_T_Periphery_0DCapable-g_Ca_T_Centre_0DCapable);
      otherwise:
        g_Ca_T_Centre_1DCapable+FCell*(g_Ca_T_Periphery_1DCapable-g_Ca_T_Centre_1DCapable);
    endsel;
    i_Ca_T = g_Ca_T*d_T*f_T*(V-E_Ca_T);
  enddef;

  def comp T_type_Ca_channel_d_gate as
    var d_T: dimensionless {init: 0.42074047435, interface: public};
    var alpha_d_T: per_second;
    var beta_d_T: per_second;
    var d_T_infinity: dimensionless;
    var tau_d_T: second;
    var V: millivolt {interface: public};
    var time: second {interface: public};
    ode(d_T, time) = (d_T_infinity-d_T)/tau_d_T;
    alpha_d_T = 1068{per_second}*exp((V+26.3{millivolt})/30{millivolt});
    beta_d_T = 1068{per_second}*exp(-(V+26.3{millivolt})/30{millivolt});
    tau_d_T = 1{dimensionless}/(alpha_d_T+beta_d_T);
    d_T_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+37{millivolt})/6.8{millivolt}));
  enddef;

  def comp T_type_Ca_channel_f_gate as
    var Version: dimensionless {interface: public};
    var FCell: dimensionless {interface: public};
    var f_T: dimensionless {init: 0.038968420558, interface: public};
    var alpha_f_T: per_second;
    var beta_f_T: per_second;
    var f_T_infinity: dimensionless;
    var tau_f_T: second;
    var V: millivolt {interface: public};
    var time: second {interface: public};
    ode(f_T, time) = (f_T_infinity-f_T)/tau_f_T;
    alpha_f_T = sel
      case Version == 1{dimensionless}:
        15.3{per_second}*exp(-(V+71{millivolt}+0.7{millivolt}*FCell)/83.3{millivolt});
      otherwise:
        15.3{per_second}*exp(-(V+71.7{millivolt})/83.3{millivolt});
    endsel;
    beta_f_T = sel
      case Version == 1{dimensionless}:
        15{per_second}*exp((V+71{millivolt})/15.38{millivolt});
      otherwise:
        15{per_second}*exp((V+71.7{millivolt})/15.38{millivolt});
    endsel;
    tau_f_T = 1{dimensionless}/(alpha_f_T+beta_f_T);
    f_T_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+71{millivolt})/9{millivolt}));
  enddef;

  def comp four_AP_sensitive_currents as
    var Version: dimensionless {interface: public_and_private};
    var FCell: dimensionless {interface: public_and_private};
    var i_to: nanoA {interface: public};
    var i_sus: nanoA {interface: public};
    var g_to_Centre_Published: microS {init: 0.00491};
    var g_to_Centre_0DCapable: microS {init: 0.004905};
    var g_to_Centre_1DCapable: microS {init: 0.004905};
    var g_to_Periphery_Published: microS {init: 0.03649};
    var g_to_Periphery_0DCapable: microS {init: 0.036495};
    var g_to_Periphery_1DCapable: microS {init: 0.0365};
    var g_to: microS;
    var g_sus_Centre_Published: microS {init: 6.65e-5};
    var g_sus_Centre_0DCapable: microS {init: 6.645504e-5};
    var g_sus_Centre_1DCapable: microS {init: 0.000266};
    var g_sus_Periphery_Published: microS {init: 0.0114};
    var g_sus_Periphery_0DCapable: microS {init: 0.01138376};
    var g_sus_Periphery_1DCapable: microS {init: 0.0114};
    var g_sus: microS;
    var E_K: millivolt {interface: public};
    var V: millivolt {interface: public_and_private};
    var time: second {interface: public_and_private};
    var q: dimensionless {interface: private};
    var r: dimensionless {interface: private};
    g_to = sel
      case Version == 0{dimensionless}:
        g_to_Centre_Published+FCell*(g_to_Periphery_Published-g_to_Centre_Published);
      case Version == 1{dimensionless}:
        g_to_Centre_0DCapable+FCell*(g_to_Periphery_0DCapable-g_to_Centre_0DCapable);
      otherwise:
        g_to_Centre_1DCapable+FCell*(g_to_Periphery_1DCapable-g_to_Centre_1DCapable);
    endsel;
    g_sus = sel
      case Version == 0{dimensionless}:
        g_sus_Centre_Published+FCell*(g_sus_Periphery_Published-g_sus_Centre_Published);
      case Version == 1{dimensionless}:
        g_sus_Centre_0DCapable+FCell*(g_sus_Periphery_0DCapable-g_sus_Centre_0DCapable);
      otherwise:
        g_sus_Centre_1DCapable+FCell*(g_sus_Periphery_1DCapable-g_sus_Centre_1DCapable);
    endsel;
    i_to = g_to*q*r*(V-E_K);
    i_sus = g_sus*r*(V-E_K);
  enddef;

  def comp four_AP_sensitive_currents_q_gate as
    var Version: dimensionless {interface: public};
    var FCell: dimensionless {interface: public};
    var q: dimensionless {init: 0.29760539675, interface: public};
    var q_infinity: dimensionless;
    var tau_q: second;
    var V: millivolt {interface: public};
    var time: second {interface: public};
    ode(q, time) = (q_infinity-q)/tau_q;
    q_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+59.37{millivolt})/13.1{millivolt}));
    tau_q = sel
      case Version == 0{dimensionless}:
        0.0101{second}+0.06517{second}/(0.57{dimensionless}*exp(-0.08{per_millivolt}*(V+49{millivolt})))+2.4e-5{second}*exp(0.1{per_millivolt}*(V+50.93{millivolt}));
      case Version == 1{dimensionless}:
        0.001{dimensionless}/3{dimensionless}*(30.31{second}+195.5{second}/(0.5686{dimensionless}*exp(-0.08161{per_millivolt}*(V+39{millivolt}+10{millivolt}*FCell))+0.7174{dimensionless}*exp((0.2719{dimensionless}-0.1719{dimensionless}*FCell)*1{per_millivolt}*(V+40.93{millivolt}+10{millivolt}*FCell))));
      otherwise:
        0.0101{second}+0.06517{second}/(0.5686{dimensionless}*exp(-0.08161{per_millivolt}*(V+39{millivolt}))+0.7174{dimensionless}*exp(0.2719{per_millivolt}*(V+40.93{millivolt})));
    endsel;
  enddef;

  def comp four_AP_sensitive_currents_r_gate as
    var Version: dimensionless {interface: public};
    var r: dimensionless {init: 0.064402950262, interface: public};
    var r_infinity: dimensionless;
    var tau_r: second;
    var V: millivolt {interface: public};
    var time: second {interface: public};
    ode(r, time) = (r_infinity-r)/tau_r;
    r_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-10.93{millivolt})/19.7{millivolt}));
    tau_r = sel
      case Version == 0{dimensionless}:
        0.001{dimensionless}*(2.98{second}+15.59{second}/(1.037{dimensionless}*exp(0.09{per_millivolt}*(V+30.61{millivolt}))+0.369{dimensionless}*exp(-0.12{per_millivolt}*(V+23.84{millivolt}))));
      case Version == 1{dimensionless}:
        0.0025{dimensionless}*(1.191{second}+7.838{second}/(1.037{dimensionless}*exp(0.09012{per_millivolt}*(V+30.61{millivolt}))+0.369{dimensionless}*exp(-0.119{per_millivolt}*(V+23.84{millivolt}))));
      otherwise:
        0.001{dimensionless}*(2.98{second}+19.59{second}/(1.037{dimensionless}*exp(0.09012{per_millivolt}*(V+30.61{millivolt}))+0.369{dimensionless}*exp(-0.119{per_millivolt}*(V+23.84{millivolt}))));
    endsel;
  enddef;

  def comp rapid_delayed_rectifying_potassium_current as
    var Version: dimensionless {interface: public_and_private};
    var FCell: dimensionless {interface: public};
    var i_K_r: nanoA {interface: public};
    var g_K_r_Centre_Published: microS {init: 0.000797};
    var g_K_r_Centre_0DCapable: microS {init: 0.00079704};
    var g_K_r_Centre_1DCapable: microS {init: 0.000738};
    var g_K_r_Periphery_Published: microS {init: 0.016};
    var g_K_r_Periphery_0DCapable: microS {init: 0.016};
    var g_K_r_Periphery_1DCapable: microS {init: 0.0208};
    var g_K_r: microS;
    var P_a: dimensionless;
    var E_K: millivolt {interface: public};
    var time: second {interface: public_and_private};
    var V: millivolt {interface: public_and_private};
    var P_af: dimensionless {interface: private};
    var P_as: dimensionless {interface: private};
    var P_i: dimensionless {interface: private};
    g_K_r = sel
      case Version == 0{dimensionless}:
        g_K_r_Centre_Published+FCell*(g_K_r_Periphery_Published-g_K_r_Centre_Published);
      case Version == 1{dimensionless}:
        g_K_r_Centre_0DCapable+FCell*(g_K_r_Periphery_0DCapable-g_K_r_Centre_0DCapable);
      otherwise:
        g_K_r_Centre_1DCapable+FCell*(g_K_r_Periphery_1DCapable-g_K_r_Centre_1DCapable);
    endsel;
    i_K_r = g_K_r*P_a*P_i*(V-E_K);
    P_a = 0.6{dimensionless}*P_af+0.4{dimensionless}*P_as;
  enddef;

  def comp rapid_delayed_rectifying_potassium_current_P_af_gate as
    var Version: dimensionless {interface: public};
    var P_af: dimensionless {init: 0.13034201158, interface: public};
    var P_af_infinity: dimensionless {interface: public};
    var tau_P_af: second;
    var V: millivolt {interface: public};
    var time: second {interface: public};
    ode(P_af, time) = (P_af_infinity-P_af)/tau_P_af;
    P_af_infinity = sel
      case Version <> 2{dimensionless}:
        1{dimensionless}/(1{dimensionless}+exp(-(V+14.2{millivolt})/10.6{millivolt}));
      otherwise:
        1{dimensionless}/(1{dimensionless}+exp(-(V+13.2{millivolt})/10.6{millivolt}));
    endsel;
    tau_P_af = sel
      case Version <> 2{dimensionless}:
        1{second}/(37.2{dimensionless}*exp((V-9{millivolt})/15.9{millivolt})+0.96{dimensionless}*exp(-(V-9{millivolt})/22.5{millivolt}));
      otherwise:
        1{second}/(37.2{dimensionless}*exp((V-10{millivolt})/15.9{millivolt})+0.96{dimensionless}*exp(-(V-10{millivolt})/22.5{millivolt}));
    endsel;
  enddef;

  def comp rapid_delayed_rectifying_potassium_current_P_as_gate as
    var Version: dimensionless {interface: public};
    var P_as: dimensionless {init: 0.46960956028, interface: public};
    var P_as_infinity: dimensionless;
    var tau_P_as: second;
    var P_af_infinity: dimensionless {interface: public};
    var V: millivolt {interface: public};
    var time: second {interface: public};
    ode(P_as, time) = (P_as_infinity-P_as)/tau_P_as;
    P_as_infinity = P_af_infinity;
    tau_P_as = sel
      case Version <> 2{dimensionless}:
        1{second}/(4.2{dimensionless}*exp((V-9{millivolt})/17{millivolt})+0.15{dimensionless}*exp(-(V-9{millivolt})/21.6{millivolt}));
      otherwise:
        1{second}/(4.2{dimensionless}*exp((V-10{millivolt})/17{millivolt})+0.15{dimensionless}*exp(-(V-10{millivolt})/21.6{millivolt}));
    endsel;
  enddef;

  def comp rapid_delayed_rectifying_potassium_current_P_i_gate as
    var Version: dimensionless {interface: public};
    var P_i: dimensionless {init: 0.87993375273, interface: public};
    var P_i_infinity: dimensionless;
    var tau_P_i: second;
    var V: millivolt {interface: public};
    var time: second {interface: public};
    tau_P_i = sel
      case Version == 0{dimensionless}:
        0.002{second};
      case Version == 1{dimensionless}:
        0.002{second};
      otherwise:
        0.006{second};
    endsel;
    ode(P_i, time) = (P_i_infinity-P_i)/tau_P_i;
    P_i_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+18.6{millivolt})/10.1{millivolt}));
  enddef;

  def comp slow_delayed_rectifying_potassium_current as
    var Version: dimensionless {interface: public};
    var FCell: dimensionless {interface: public};
    var i_K_s: nanoA {interface: public};
    var g_K_s_Centre_Published: microS {init: 0.000518};
    var g_K_s_Centre_0DCapable: microS {init: 0.0003445};
    var g_K_s_Centre_1DCapable: microS {init: 0.000345};
    var g_K_s_Periphery_Published: microS {init: 0.0104};
    var g_K_s_Periphery_0DCapable: microS {init: 0.0104};
    var g_K_s_Periphery_1DCapable: microS {init: 0.0104};
    var g_K_s: microS;
    var E_K_s: millivolt {interface: public};
    var time: second {interface: public_and_private};
    var V: millivolt {interface: public_and_private};
    var xs: dimensionless {interface: private};
    g_K_s = sel
      case Version == 0{dimensionless}:
        g_K_s_Centre_Published+FCell*(g_K_s_Periphery_Published-g_K_s_Centre_Published);
      case Version == 1{dimensionless}:
        g_K_s_Centre_0DCapable+FCell*(g_K_s_Periphery_0DCapable-g_K_s_Centre_0DCapable);
      otherwise:
        g_K_s_Centre_1DCapable+FCell*(g_K_s_Periphery_1DCapable-g_K_s_Centre_1DCapable);
    endsel;
    i_K_s = g_K_s*sqr(xs)*(V-E_K_s);
  enddef;

  def comp slow_delayed_rectifying_potassium_current_xs_gate as
    var xs: dimensionless {init: 0.082293827208, interface: public};
    var alpha_xs: per_second;
    var beta_xs: per_second;
    var V: millivolt {interface: public};
    var time: second {interface: public};
    ode(xs, time) = alpha_xs*(1{dimensionless}-xs)-beta_xs*xs;
    alpha_xs = 14{per_second}/(1{dimensionless}+exp(-(V-40{millivolt})/9{millivolt}));
    beta_xs = 1{per_second}*exp(-V/45{millivolt});
  enddef;

  def comp hyperpolarisation_activated_current as
    var Version: dimensionless {interface: public_and_private};
    var FCell: dimensionless {interface: public};
    var i_f_Na: nanoA {interface: public};
    var i_f_K: nanoA {interface: public};
    var g_f_Na_Centre_Published: microS {init: 0.000548};
    var g_f_Na_Centre_0DCapable: microS {init: 0.0005465};
    var g_f_Na_Centre_1DCapable: microS {init: 0.000437};
    var g_f_Na_Periphery_Published: microS {init: 0.0069};
    var g_f_Na_Periphery_0DCapable: microS {init: 0.006875};
    var g_f_Na_Periphery_1DCapable: microS {init: 0.0055};
    var g_f_Na: microS;
    var g_f_K_Centre_Published: microS {init: 0.000548};
    var g_f_K_Centre_0DCapable: microS {init: 0.0005465};
    var g_f_K_Centre_1DCapable: microS {init: 0.000437};
    var g_f_K_Periphery_Published: microS {init: 0.0069};
    var g_f_K_Periphery_0DCapable: microS {init: 0.006875};
    var g_f_K_Periphery_1DCapable: microS {init: 0.0055};
    var g_f_K: microS;
    var E_K: millivolt {interface: public};
    var E_Na: millivolt {interface: public};
    var time: second {interface: public_and_private};
    var V: millivolt {interface: public_and_private};
    var y: dimensionless {interface: private};
    g_f_Na = sel
      case Version == 0{dimensionless}:
        g_f_Na_Centre_Published+FCell*(g_f_Na_Periphery_Published-g_f_Na_Centre_Published);
      case Version == 1{dimensionless}:
        g_f_Na_Centre_0DCapable+FCell*(g_f_Na_Periphery_0DCapable-g_f_Na_Centre_0DCapable);
      otherwise:
        g_f_Na_Centre_1DCapable+FCell*(g_f_Na_Periphery_1DCapable-g_f_Na_Centre_1DCapable);
    endsel;
    i_f_Na = sel
      case Version <> 2{dimensionless}:
        g_f_Na*y*(V-E_Na);
      otherwise:
        g_f_Na*y*(V-77.6{millivolt});
    endsel;
    g_f_K = sel
      case Version == 0{dimensionless}:
        g_f_K_Centre_Published+FCell*(g_f_K_Periphery_Published-g_f_K_Centre_Published);
      case Version == 1{dimensionless}:
        g_f_K_Centre_0DCapable+FCell*(g_f_K_Periphery_0DCapable-g_f_K_Centre_0DCapable);
      otherwise:
        g_f_K_Centre_1DCapable+FCell*(g_f_K_Periphery_1DCapable-g_f_K_Centre_1DCapable);
    endsel;
    i_f_K = sel
      case Version <> 2{dimensionless}:
        g_f_K*y*(V-E_K);
      otherwise:
        g_f_K*y*(V+102{millivolt});
    endsel;
  enddef;

  def comp hyperpolarisation_activated_current_y_gate as
    var Version: dimensionless {interface: public};
    var y: dimensionless {init: 0.03889291759, interface: public};
    var alpha_y: per_second;
    var beta_y: per_second;
    var V: millivolt {interface: public};
    var time: second {interface: public};
    ode(y, time) = alpha_y*(1{dimensionless}-y)-beta_y*y;
    alpha_y = sel
      case Version == 0{dimensionless}:
        1{per_second}*exp(-(V+78.91{millivolt})/26.62{millivolt});
      otherwise:
        1{per_second}*exp(-(V+78.91{millivolt})/26.63{millivolt});
    endsel;
    beta_y = 1{per_second}*exp((V+75.13{millivolt})/21.25{millivolt});
  enddef;

  def comp sodium_background_current as
    var Version: dimensionless {interface: public};
    var FCell: dimensionless {interface: public};
    var i_b_Na: nanoA {interface: public};
    var g_b_Na_Centre_Published: microS {init: 5.8e-5};
    var g_b_Na_Centre_0DCapable: microS {init: 5.81818e-5};
    var g_b_Na_Centre_1DCapable: microS {init: 5.8e-5};
    var g_b_Na_Periphery_Published: microS {init: 0.000189};
    var g_b_Na_Periphery_0DCapable: microS {init: 0.0001888};
    var g_b_Na_Periphery_1DCapable: microS {init: 0.000189};
    var g_b_Na: microS;
    var E_Na: millivolt {interface: public};
    var V: millivolt {interface: public};
    g_b_Na = sel
      case Version == 0{dimensionless}:
        g_b_Na_Centre_Published+FCell*(g_b_Na_Periphery_Published-g_b_Na_Centre_Published);
      case Version == 1{dimensionless}:
        g_b_Na_Centre_0DCapable+FCell*(g_b_Na_Periphery_0DCapable-g_b_Na_Centre_0DCapable);
      otherwise:
        g_b_Na_Centre_1DCapable+FCell*(g_b_Na_Periphery_1DCapable-g_b_Na_Centre_1DCapable);
    endsel;
    i_b_Na = g_b_Na*(V-E_Na);
  enddef;

  def comp potassium_background_current as
    var Version: dimensionless {interface: public};
    var FCell: dimensionless {interface: public};
    var i_b_K: nanoA {interface: public};
    var g_b_K_Centre_Published: microS {init: 2.52e-5};
    var g_b_K_Centre_0DCapable: microS {init: 2.523636e-5};
    var g_b_K_Centre_1DCapable: microS {init: 2.52e-5};
    var g_b_K_Periphery_Published: microS {init: 8.19e-5};
    var g_b_K_Periphery_0DCapable: microS {init: 8.1892e-5};
    var g_b_K_Periphery_1DCapable: microS {init: 8.19e-5};
    var g_b_K: microS;
    var E_K: millivolt {interface: public};
    var V: millivolt {interface: public};
    g_b_K = sel
      case Version == 0{dimensionless}:
        g_b_K_Centre_Published+FCell*(g_b_K_Periphery_Published-g_b_K_Centre_Published);
      case Version == 1{dimensionless}:
        g_b_K_Centre_0DCapable+FCell*(g_b_K_Periphery_0DCapable-g_b_K_Centre_0DCapable);
      otherwise:
        g_b_K_Centre_1DCapable+FCell*(g_b_K_Periphery_1DCapable-g_b_K_Centre_1DCapable);
    endsel;
    i_b_K = g_b_K*(V-E_K);
  enddef;

  def comp calcium_background_current as
    var Version: dimensionless {interface: public};
    var FCell: dimensionless {interface: public};
    var i_b_Ca: nanoA {interface: public};
    var g_b_Ca_Centre_Published: microS {init: 1.32e-5};
    var g_b_Ca_Centre_0DCapable: microS {init: 1.3236e-5};
    var g_b_Ca_Centre_1DCapable: microS {init: 1.323e-5};
    var g_b_Ca_Periphery_Published: microS {init: 4.3e-5};
    var g_b_Ca_Periphery_0DCapable: microS {init: 4.2952e-5};
    var g_b_Ca_Periphery_1DCapable: microS {init: 4.29e-5};
    var g_b_Ca: microS;
    var E_Ca: millivolt {interface: public};
    var V: millivolt {interface: public};
    g_b_Ca = sel
      case Version == 0{dimensionless}:
        g_b_Ca_Centre_Published+FCell*(g_b_Ca_Periphery_Published-g_b_Ca_Centre_Published);
      case Version == 1{dimensionless}:
        g_b_Ca_Centre_0DCapable+FCell*(g_b_Ca_Periphery_0DCapable-g_b_Ca_Centre_0DCapable);
      otherwise:
        g_b_Ca_Centre_1DCapable+FCell*(g_b_Ca_Periphery_1DCapable-g_b_Ca_Centre_1DCapable);
    endsel;
    i_b_Ca = g_b_Ca*(V-E_Ca);
  enddef;

  def comp sodium_calcium_exchanger as
    var Version: dimensionless {interface: public};
    var FCell: dimensionless {interface: public};
    var i_NaCa: nanoA {interface: public};
    var k_NaCa_Centre_Published: nanoA {init: 2.7e-6};
    var k_NaCa_Centre_0DCapable: nanoA {init: 2.7229e-6};
    var k_NaCa_Centre_1DCapable: nanoA {init: 2.8e-6};
    var k_NaCa_Periphery_Published: nanoA {init: 8.8e-6};
    var k_NaCa_Periphery_0DCapable: nanoA {init: 8.83584e-6};
    var k_NaCa_Periphery_1DCapable: nanoA {init: 8.8e-6};
    var k_NaCa: nanoA;
    var d_NaCa: dimensionless {init: 0.0001};
    var gamma_NaCa: dimensionless {init: 0.5};
    var Na_i: millimolar {interface: public};
    var Na_o: millimolar {interface: public};
    var Ca_i: millimolar {interface: public};
    var Ca_o: millimolar {interface: public};
    var V: millivolt {interface: public};
    k_NaCa = sel
      case Version == 0{dimensionless}:
        k_NaCa_Centre_Published+FCell*(k_NaCa_Periphery_Published-k_NaCa_Centre_Published);
      case Version == 1{dimensionless}:
        k_NaCa_Centre_0DCapable+FCell*(k_NaCa_Periphery_0DCapable-k_NaCa_Centre_0DCapable);
      otherwise:
        k_NaCa_Centre_1DCapable+FCell*(k_NaCa_Periphery_1DCapable-k_NaCa_Centre_1DCapable);
    endsel;
    i_NaCa = sel
      case Version == 0{dimensionless}:
        k_NaCa*(pow(Na_i, 3{dimensionless})*Ca_o*exp(0.03743{per_millivolt}*V*gamma_NaCa)-pow(Na_o, 3{dimensionless})*Ca_i*exp(0.0374{per_millivolt}*V*(gamma_NaCa-1{dimensionless})))/(1{millimolar4}+d_NaCa*(Ca_i*pow(Na_o, 3{dimensionless})+Ca_o*pow(Na_i, 3{dimensionless})));
      otherwise:
        k_NaCa*(pow(Na_i, 3{dimensionless})*Ca_o*exp(0.03743{per_millivolt}*V*gamma_NaCa)-pow(Na_o, 3{dimensionless})*Ca_i*exp(0.03743{per_millivolt}*V*(gamma_NaCa-1{dimensionless})))/(1{millimolar4}+d_NaCa*(Ca_i*pow(Na_o, 3{dimensionless})+Ca_o*pow(Na_i, 3{dimensionless})));
    endsel;
  enddef;

  def comp sodium_potassium_pump as
    var Version: dimensionless {interface: public};
    var FCell: dimensionless {interface: public};
    var i_p: nanoA {interface: public};
    var K_m_Na: millimolar {init: 5.64};
    var K_m_K: millimolar {init: 0.621};
    var i_p_max_Centre_Published: nanoA {init: 0.0478};
    var i_p_max_Centre_0DCapable: nanoA {init: 0.04782545};
    var i_p_max_Centre_1DCapable: nanoA {init: 0.0478};
    var i_p_max_Periphery_Published: nanoA {init: 0.16};
    var i_p_max_Periphery_0DCapable: nanoA {init: 0.1551936};
    var i_p_max_Periphery_1DCapable: nanoA {init: 0.16};
    var i_p_max: nanoA;
    var Na_i: millimolar {interface: public};
    var K_o: millimolar {interface: public};
    var V: millivolt {interface: public};
    i_p_max = sel
      case Version == 0{dimensionless}:
        i_p_max_Centre_Published+FCell*(i_p_max_Periphery_Published-i_p_max_Centre_Published);
      case Version == 1{dimensionless}:
        i_p_max_Centre_0DCapable+FCell*(i_p_max_Periphery_0DCapable-i_p_max_Centre_0DCapable);
      otherwise:
        i_p_max_Centre_1DCapable+FCell*(i_p_max_Periphery_1DCapable-i_p_max_Centre_1DCapable);
    endsel;
    i_p = i_p_max*pow(Na_i/(K_m_Na+Na_i), 3{dimensionless})*sqr(K_o/(K_m_K+K_o))*1.6{dimensionless}/(1.5{dimensionless}+exp(-(V+60{millivolt})/40{millivolt}));
  enddef;

  def comp persistent_calcium_current as
    var Version: dimensionless {interface: public};
    var FCell: dimensionless {interface: public};
    var i_Ca_p: nanoA {interface: public};
    var i_Ca_p_max_Centre_Published: nanoA {init: 0};
    var i_Ca_p_max_Centre_0DCapable: nanoA {init: 0};
    var i_Ca_p_max_Centre_1DCapable: nanoA {init: 0.0042};
    var i_Ca_p_max_Periphery_Published: nanoA {init: 0};
    var i_Ca_p_max_Periphery_0DCapable: nanoA {init: 0};
    var i_Ca_p_max_Periphery_1DCapable: nanoA {init: 0.03339};
    var i_Ca_p_max: nanoA;
    var Ca_i: millimolar {interface: public};
    var V: millivolt {interface: public};
    i_Ca_p_max = sel
      case Version == 0{dimensionless}:
        i_Ca_p_max_Centre_Published+FCell*(i_Ca_p_max_Periphery_Published-i_Ca_p_max_Centre_Published);
      case Version == 1{dimensionless}:
        i_Ca_p_max_Centre_0DCapable+FCell*(i_Ca_p_max_Periphery_0DCapable-i_Ca_p_max_Centre_0DCapable);
      otherwise:
        i_Ca_p_max_Centre_1DCapable+FCell*(i_Ca_p_max_Periphery_1DCapable-i_Ca_p_max_Centre_1DCapable);
    endsel;
    i_Ca_p = i_Ca_p_max*Ca_i/(Ca_i+0.0004{millimolar});
  enddef;

  def comp ionic_concentrations as
    var Na_i: millimolar {init: 8, interface: public};
    var Na_o: millimolar {init: 140, interface: public};
    var Ca_i: millimolar {init: 0.0001, interface: public};
    var Ca_o: millimolar {init: 2, interface: public};
    var K_i: millimolar {init: 140, interface: public};
    var K_o: millimolar {init: 5.4, interface: public};
  enddef;

  def comp reversal_and_equilibrium_potentials as
    var Version: dimensionless {interface: public};
    var E_Na: millivolt {interface: public};
    var E_K: millivolt {interface: public};
    var E_K_s: millivolt {interface: public};
    var E_Ca: millivolt {interface: public};
    var K_o: millimolar {interface: public};
    var Na_o: millimolar {interface: public};
    var K_i: millimolar {interface: public};
    var Na_i: millimolar {interface: public};
    var Ca_o: millimolar {interface: public};
    var Ca_i: millimolar {interface: public};
    var R: millijoule_per_mole_kelvin {interface: public};
    var F: coulomb_per_mole {interface: public};
    var T: kelvin {interface: public};
    E_Na = R*T/F*ln(Na_o/Na_i);
    E_K = R*T/F*ln(K_o/K_i);
    E_Ca = R*T/(2{dimensionless}*F)*ln(Ca_o/Ca_i);
    E_K_s = sel
      case Version == 0{dimensionless}:
        R*T/F*ln((K_o+0.12{dimensionless}*Na_o)/(K_i+0.12{dimensionless}*Na_i));
      otherwise:
        R*T/F*ln((K_o+0.03{dimensionless}*Na_o)/(K_i+0.03{dimensionless}*Na_i));
    endsel;
  enddef;
  def group as encapsulation for
    comp sodium_current incl
      comp sodium_current_m_gate;
      comp sodium_current_h_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_gate;
      comp L_type_Ca_channel_f_gate;
    endcomp;
    comp T_type_Ca_channel incl
      comp T_type_Ca_channel_d_gate;
      comp T_type_Ca_channel_f_gate;
    endcomp;
    comp four_AP_sensitive_currents incl
      comp four_AP_sensitive_currents_q_gate;
      comp four_AP_sensitive_currents_r_gate;
    endcomp;
    comp rapid_delayed_rectifying_potassium_current incl
      comp rapid_delayed_rectifying_potassium_current_P_af_gate;
      comp rapid_delayed_rectifying_potassium_current_P_as_gate;
      comp rapid_delayed_rectifying_potassium_current_P_i_gate;
    endcomp;
    comp slow_delayed_rectifying_potassium_current incl
      comp slow_delayed_rectifying_potassium_current_xs_gate;
    endcomp;
    comp hyperpolarisation_activated_current incl
      comp hyperpolarisation_activated_current_y_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between T_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between four_AP_sensitive_currents and environment for
    vars time and time;
  enddef;
  def map between rapid_delayed_rectifying_potassium_current and environment for
    vars time and time;
  enddef;
  def map between slow_delayed_rectifying_potassium_current and environment for
    vars time and time;
  enddef;
  def map between hyperpolarisation_activated_current and environment for
    vars time and time;
  enddef;
  def map between membrane and sodium_current for
    vars Version and Version;
    vars FCell and FCell;
    vars i_Na and i_Na;
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars Version and Version;
    vars FCell and FCell;
    vars i_Ca_L and i_Ca_L;
    vars V and V;
  enddef;
  def map between membrane and T_type_Ca_channel for
    vars Version and Version;
    vars FCell and FCell;
    vars i_Ca_T and i_Ca_T;
    vars V and V;
  enddef;
  def map between membrane and four_AP_sensitive_currents for
    vars Version and Version;
    vars FCell and FCell;
    vars i_to and i_to;
    vars i_sus and i_sus;
    vars V and V;
  enddef;
  def map between membrane and rapid_delayed_rectifying_potassium_current for
    vars Version and Version;
    vars FCell and FCell;
    vars i_K_r and i_K_r;
    vars V and V;
  enddef;
  def map between membrane and slow_delayed_rectifying_potassium_current for
    vars Version and Version;
    vars FCell and FCell;
    vars i_K_s and i_K_s;
    vars V and V;
  enddef;
  def map between membrane and hyperpolarisation_activated_current for
    vars Version and Version;
    vars FCell and FCell;
    vars i_f_Na and i_f_Na;
    vars i_f_K and i_f_K;
    vars V and V;
  enddef;
  def map between membrane and sodium_background_current for
    vars Version and Version;
    vars FCell and FCell;
    vars V and V;
    vars i_b_Na and i_b_Na;
  enddef;
  def map between membrane and potassium_background_current for
    vars Version and Version;
    vars FCell and FCell;
    vars V and V;
    vars i_b_K and i_b_K;
  enddef;
  def map between membrane and calcium_background_current for
    vars Version and Version;
    vars FCell and FCell;
    vars V and V;
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between membrane and sodium_calcium_exchanger for
    vars Version and Version;
    vars FCell and FCell;
    vars i_NaCa and i_NaCa;
    vars V and V;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars Version and Version;
    vars FCell and FCell;
    vars i_p and i_p;
    vars V and V;
  enddef;
  def map between membrane and persistent_calcium_current for
    vars Version and Version;
    vars FCell and FCell;
    vars i_Ca_p and i_Ca_p;
    vars V and V;
  enddef;
  def map between membrane and reversal_and_equilibrium_potentials for
    vars Version and Version;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between reversal_and_equilibrium_potentials and sodium_current for
    vars E_Na and E_Na;
  enddef;
  def map between ionic_concentrations and sodium_current for
    vars Na_o and Na_o;
  enddef;
  def map between reversal_and_equilibrium_potentials and four_AP_sensitive_currents for
    vars E_K and E_K;
  enddef;
  def map between reversal_and_equilibrium_potentials and rapid_delayed_rectifying_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_and_equilibrium_potentials and slow_delayed_rectifying_potassium_current for
    vars E_K_s and E_K_s;
  enddef;
  def map between reversal_and_equilibrium_potentials and hyperpolarisation_activated_current for
    vars E_K and E_K;
    vars E_Na and E_Na;
  enddef;
  def map between reversal_and_equilibrium_potentials and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_and_equilibrium_potentials and potassium_background_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_and_equilibrium_potentials and calcium_background_current for
    vars E_Ca and E_Ca;
  enddef;
  def map between sodium_calcium_exchanger and ionic_concentrations for
    vars Ca_i and Ca_i;
    vars Na_i and Na_i;
    vars Ca_o and Ca_o;
    vars Na_o and Na_o;
  enddef;
  def map between sodium_potassium_pump and ionic_concentrations for
    vars Na_i and Na_i;
    vars K_o and K_o;
  enddef;
  def map between reversal_and_equilibrium_potentials and ionic_concentrations for
    vars K_o and K_o;
    vars Na_o and Na_o;
    vars K_i and K_i;
    vars Na_i and Na_i;
    vars Ca_o and Ca_o;
    vars Ca_i and Ca_i;
  enddef;
  def map between persistent_calcium_current and ionic_concentrations for
    vars Ca_i and Ca_i;
  enddef;
  def map between sodium_current and sodium_current_m_gate for
    vars Version and Version;
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between sodium_current and sodium_current_h_gate for
    vars Version and Version;
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_gate for
    vars Version and Version;
    vars FCell and FCell;
    vars d_L and d_L;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_gate for
    vars Version and Version;
    vars FCell and FCell;
    vars f_L and f_L;
    vars time and time;
    vars V and V;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_d_gate for
    vars d_T and d_T;
    vars time and time;
    vars V and V;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_f_gate for
    vars Version and Version;
    vars FCell and FCell;
    vars f_T and f_T;
    vars time and time;
    vars V and V;
  enddef;
  def map between four_AP_sensitive_currents and four_AP_sensitive_currents_q_gate for
    vars Version and Version;
    vars FCell and FCell;
    vars q and q;
    vars time and time;
    vars V and V;
  enddef;
  def map between four_AP_sensitive_currents and four_AP_sensitive_currents_r_gate for
    vars Version and Version;
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_delayed_rectifying_potassium_current and rapid_delayed_rectifying_potassium_current_P_af_gate for
    vars Version and Version;
    vars P_af and P_af;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_delayed_rectifying_potassium_current and rapid_delayed_rectifying_potassium_current_P_as_gate for
    vars Version and Version;
    vars P_as and P_as;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_delayed_rectifying_potassium_current_P_af_gate and rapid_delayed_rectifying_potassium_current_P_as_gate for
    vars P_af_infinity and P_af_infinity;
  enddef;
  def map between rapid_delayed_rectifying_potassium_current and rapid_delayed_rectifying_potassium_current_P_i_gate for
    vars Version and Version;
    vars P_i and P_i;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_delayed_rectifying_potassium_current and slow_delayed_rectifying_potassium_current_xs_gate for
    vars xs and xs;
    vars time and time;
    vars V and V;
  enddef;
  def map between hyperpolarisation_activated_current and hyperpolarisation_activated_current_y_gate for
    vars Version and Version;
    vars y and y;
    vars time and time;
    vars V and V;
  enddef;
enddef;
