<?xml version='1.0' encoding='UTF-8'?>
<model name="modules" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="vp_simple_type">
        <variable name="t" public_interface="in" units="dimensionless"/>
        <!-- Constitutive parameters-->
        <variable name="I" public_interface="in" units="dimensionless"/>
        <variable name="C" public_interface="in" units="dimensionless"/>
        <variable name="R" public_interface="in" units="dimensionless"/>
        <variable name="R_v" public_interface="out" units="dimensionless"/>
        <!-- State Variables-->
        <variable name="u_ext" public_interface="in" units="dimensionless"/>
        <variable name="v_in" public_interface="in" units="dimensionless"/>
        <variable name="u" public_interface="out" units="dimensionless"/>
        <variable initial_value="0.0" name="q_C" public_interface="out" units="dimensionless"/>
        <variable name="u_C" public_interface="out" units="dimensionless"/>
        <variable initial_value="0.0" name="v" public_interface="out" units="dimensionless"/>
        <variable name="u_out" public_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>R_v</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="dimensionless">0.01</cn>
                    <ci>C</ci>
                </apply>
            </apply>
            <!-- Conservation Laws-->
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>v</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <ci>u</ci>
                            <ci>u_out</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>R</ci>
                            <ci>v</ci>
                        </apply>
                    </apply>
                    <ci>I</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_C</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_in</ci>
                    <ci>v</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_C</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <ci>q_C</ci>
                        <ci>C</ci>
                    </apply>
                    <ci>u_ext</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u</ci>
                <apply>
                    <plus/>
                    <ci>u_C</ci>
                    <apply>
                        <times/>
                        <ci>R_v</ci>
                        <apply>
                            <minus/>
                            <ci>v_in</ci>
                            <ci>v</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
</model>
